PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $imagen1
      pos = (-0.5, 0)
      size = (0.6, 1)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $imagen2
      pos = (0.5, 0)
      size = (0.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        hm=[]
        cp=[]
        ai=[]
        pa=[]
        vr=[]

        hm_final = 0
        cp_final = 0
        ai_final = 0
        pa_final = 0
        vr_final = 0

        HMscoreText="HM = " + str(round(hm_final,2)) + "%";
        CPscoreText="CP = " + str(round(cp_final,2)) + "%";
        AIscoreText="AI = " + str(round(ai_final,2)) + "%";
        PAscoreText="PA = " + str(round(pa_final,2)) + "%";
        VRscoreText="VR = " + str(round(vr_final,2)) + "%";
      Begin Routine:
        current_trial_data = trials.trialList[trials.thisIndex]

        hm_1=current_trial_data['hm1']
        cp_1=current_trial_data['cp1']
        ai_1=current_trial_data['ai1']
        pa_1=current_trial_data['pa1']
        vr_1=current_trial_data['vr1']

        hm_2=current_trial_data['hm2']
        cp_2=current_trial_data['cp2']
        ai_2=current_trial_data['ai2']
        pa_2=current_trial_data['pa2']
        vr_2=current_trial_data['vr2']
      Each Frame:
        if key_resp.keys=='left':
            hm.append(hm_1)
            cp.append(cp_1)
            ai.append(ai_1)
            pa.append(pa_1)
            vr.append(vr_1)


        if key_resp.keys=='right':
            hm.append(hm_2)
            cp.append(cp_2)
            ai.append(ai_2)
            pa.append(pa_2)
            vr.append(vr_2)
      End Routine:
        hm_max = 24
        cp_max = 40
        ai_max = 40
        pa_max = 40
        vr_max = 24

        hm_final = sum(hm)/hm_max * 100
        cp_final = sum(cp) / cp_max * 100
        ai_final = sum(ai) /ai_max * 100
        pa_final = sum(pa) /pa_max * 100
        vr_final = sum(vr) / vr_max * 100


        HMscoreText="HM = " + str(round(hm_final,2)) + "%";
        CPscoreText="CP = " + str(round(cp_final,2)) + "%";
        AIscoreText="AI = " + str(round(ai_final,2)) + "%";
        PAscoreText="PA = " + str(round(pa_final,2)) + "%";
        VRscoreText="VR = " + str(round(vr_final,2)) + "%";
  Routine results
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $HMscoreText
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $CPscoreText
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $AIscoreText
    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $PAscoreText
    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $VRscoreText
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:10
    conditionsFile = trials_coche.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imagen1', 'C:\\Users\\david\\OneDrive\\Documentos\\imagenes_coche\\pngs\\1.png'), ('imagen2', 'C:\\Users\\david\\OneDrive\\Documentos\\imagenes_coche\\pngs\\2.png'), ('hm1', 1), ('cp1', 1), ('ai1', 1), ('pa1', 1), ('vr1', 1), ('hm2', 1), ('cp2', 1), ('ai2', 1), ('pa2', 1), ('vr2', 1)]),
      OrderedDict([('imagen1', 'C:\\Users\\david\\OneDrive\\Documentos\\imagenes_coche\\pngs\\3.png'), ('imagen2', 'C:\\Users\\david\\OneDrive\\Documentos\\imagenes_coche\\pngs\\4.png'), ('hm1', 1), ('cp1', 1), ('ai1', 1), ('pa1', 1), ('vr1', 1), ('hm2', 1), ('cp2', 1), ('ai2', 1), ('pa2', 1), ('vr2', 1)]),
      OrderedDict([('imagen1', 'C:\\Users\\david\\OneDrive\\Documentos\\imagenes_coche\\pngs\\5.png'), ('imagen2', 'C:\\Users\\david\\OneDrive\\Documentos\\imagenes_coche\\pngs\\6.png'), ('hm1', 1), ('cp1', 1), ('ai1', 1), ('pa1', 1), ('vr1', 1), ('hm2', 1), ('cp2', 1), ('ai2', 1), ('pa2', 1), ('vr2', 1)]),
      OrderedDict([('imagen1', 'C:\\Users\\david\\OneDrive\\Documentos\\imagenes_coche\\pngs\\7.png'), ('imagen2', 'C:\\Users\\david\\OneDrive\\Documentos\\imagenes_coche\\pngs\\8.png'), ('hm1', 1), ('cp1', 1), ('ai1', 1), ('pa1', 1), ('vr1', 1), ('hm2', 1), ('cp2', 1), ('ai2', 1), ('pa2', 1), ('vr2', 1)])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
    Routine trial
  LoopTerminator trials
  Routine results
